TUMOTRAK                                                                         #!GUI1.0
VACUUM
0, 0, 0, 0, 0, 2, 0,  IWATCH ETC.
1000000, 33, 97, 500, 1, 200, 2, 0,  NCASE ETC.
-1, 13, 0.1, 0.1, -1, 0,  0.0, 0.0, 0.0, 0.0,  IQIN, ISOURCE + OPTIONS
0, MONOENERGETIC
0.200
0, 0, 0.521, 0.01, 0, 0, ,  0 , ECUT,PCUT,IREJCT,ESAVE
0, 0, 0, 0, 0,  PHOTON FORCING
1, 1, SCORING INPUT
1, 1
2,
0,  DOSE COMPONENTS
0.0, Z TO FRONT FACE
*********** start of CM XTUBE with identifier TUBE  ***********
50.0, RMAX
XTUBE
0, 4, ZMIN, ZTHICK
45, ANGLE
1, # LAYERS
0.2, 0
0.521, 0.01, 0, 0,
W_516kV
0.521, 0.01, 0, 0,
VACUUM
0.521, 0.01, 0, 0,
CU521xcom
*********************end of all CMs*****************************
 #########################
 :Start MC Transport Parameter:

 Global ECUT= 0.521
 Global PCUT= 0.01
 Global SMAX= 5
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= EXACT
 Skin depth for BCA= 0
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= Simple
 Brems cross sections= BH
 Bound Compton scattering= On
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= BH
 Photoelectron angular sampling= Off
 Rayleigh scattering= On
 Atomic relaxations= On
 Electron impact ionization= On
 Photon cross sections= xcom
 Photon cross-sections output= Off

 :Stop MC Transport Parameter:
 #########################
 :Start BCSE:

 Use BCSE= On
 Media to enhance=  W_516kV
 Enhancement constant= 1
 Enhancement power= 200
 Russian Roulette= on

 :Stop BCSE:
 #########################
